---
API: 2.1
OpenSesame: 3.3.8
Platform: posix
---
set width 1024
set uniform_coordinates yes
set title "New experiment"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set round_decimals 2
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "/home/march/opensesame"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set canvas_backend psycho
set background black

define sketchpad break
	set duration 2000
	set description "Displays stimuli"

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run getting_started always
	run welcome always
	run soundcard_config always
	run recording_trials always
	run thanks always

define sketchpad fixation_point
	set duration 500
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define notepad getting_started
	__note__
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	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define loop recording_trials
	set source_file "stims.csv"
	set source file
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run trial_sequence

define inline_script soundcard_config
	set description "Executes Python code"
	set _run ""
	___prepare__
	# Required libraries
	import sounddevice
	import os
	import m2.runAudioExperiment.experiment_config as ec
	
	# Imports for 'tapping_recording'
	import pydub
	import numpy as np
	from scipy.io import wavfile
	
	# Configuration
	## Sound device name as string partial patch of names provided by:
	## `$> runAudioExperiment -l`
	sound_device = "USB Audio" 
	
	# Device name is used to find device id
	device_info, device_id = ec.find_sound_device(sound_device)
	
	# Selected device information is printed
	print("Sound device selected info:", device_info)
	# Selected device is configured in `sounddevice`
	sounddevice.default.device = device_id
	
	# Default stimuli, overriden by the loop
	# stimuli = "training_1.wav"
	
	# Creating output folders (recordings/{participant}/)
	if not os.path.isdir('recordings'):
	    os.mkdir('recordings')
	   
	participant = str(var.subject_nr)
	r2 = os.path.join('recordings', participant)
	if not os.path.isdir(r2):
	    os.mkdir(r2)
	
	# Function to create recordings filenames.
	def recording_path(participant, stimuli):
	    basename, exp = os.path.splitext(os.path.basename(stimuli))
	    return os.path.join('recordings', participant, '.'.join([basename, 'rec'+exp]))
	__end__

define inline_script tapping_recording
	set description "Executes Python code"
	___run__
	# from loop config: `stimuli`
	# as path to audio to be played
	
	# Audio is played while recording the input device
	# This is a blocking call, meaning that any other component
	# configured in the routine will execute after the audio is played
	rec_data = sounddevice.playrec(data, 
	                               samplerate=seg.frame_rate,
	                               blocking=True,
	                               channels=2)  
	                                                         
	# Recorded audio is saved in the participant's folder with
	# extension ".rec.wav" into `recordings/{participant}`.
	output_stimuli = recording_path(participant, var.stimuli)
	wavfile.write(output_stimuli, seg.frame_rate, rec_data) 
	__end__
	___prepare__
	# audio is opened
	seg = pydub.AudioSegment.from_file(var.stimuli)  
	data = np.array(seg.get_array_of_samples()).reshape((-1, seg.channels))
	__end__

define sketchpad thanks
	set duration 2000
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text=Thanks x=0.0 y=0.0 z_index=0

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixation_point always
	run tapping_recording always
	run break always

define sketchpad welcome
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="Audio recording experiment." x=-12 y=-32 z_index=0

