PsychoPy2experiment version="2021.1.1"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = audio_experiment
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Routines
  Routine trial
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        # Required libraries
        import sounddevice
        import pydub
        from scipy.io import wavfile
        import m2.runAudioExperiment.experiment_config as ec

        # Configuration
        ## Sound device name as string partial patch of names provided by:
        ## `$> runAudioExperiment -l`
        sound_device = "USB Audio"

        # Device name is used to find device id
        device_info, device_id = ec.find_sound_device(sound_device)

        # Selected device information is printed
        print("Sound device selected info:", device_info)
        # Selected device is configured in `sounddevice`
        sounddevice.default.device = device_id

        # Default stimuli, overriden by the loop
        stimuli = "training_1.wav"

        # Creating output folders (recordings/{participant}/)
        if not os.path.isdir('recordings'):
            os.mkdir('recordings')

        participant = expInfo['participant']
        r2 = os.path.join('recordings', participant)
        if not os.path.isdir(r2):
            os.mkdir(r2)

        # Function to create recordings filenames.
        def recording_path(participant, stimuli):
            basename, exp = os.path.splitext(os.path.basename(stimuli))
            return os.path.join('recordings', participant, '.'.join([basename, 'rec'+exp]))
      Begin Routine:
        # from loop config: `stimuli`
        # as path to audio to be played

        # clear screen
        win.flip()

        # audio is opened
        seg = pydub.AudioSegment.from_file(stimuli)
        data = np.array(seg.get_array_of_samples()).reshape((-1, seg.channels))

        # Audio is played while recording the input device
        # This is a blocking call, meaning that any other component
        # configured in the routine will execute after the audio is played
        rec_data = sounddevice.playrec(data,
                                                                 samplerate=seg.frame_rate,
                                                                 blocking=True,
                                                                 channels=2)
      End Routine:
        # Recorded audio is saved in the participant's folder with
        # extension ".rec.wav" into `recordings/{participant}`.
        output_stimuli = recording_path(expInfo['participant'], stimuli)
        wavfile.write(output_stimuli, seg.frame_rate, rec_data)
  Routine intro
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Audio recording experiment.
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  Routine trial_break
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Break
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  Routine thanks
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Thanks for participating
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine intro
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stims/stims.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('stimuli', 'stims/ejemplo_pulso_1.wav')]),
      OrderedDict([('stimuli', 'stims/ejemplo_pulso_2.wav')]),
      OrderedDict([('stimuli', 'stims/ejemplo_pulso_3.wav')]),
      OrderedDict([('stimuli', 'stims/ejemplo_ritmo.wav')])]
    Routine trial
    Routine trial_break
  LoopTerminator trials
  Routine thanks
